<?xml version="1.0" encoding="UTF-8"?>
<model cmeta:id="Follicular_Lymphoma Network" name="Follicular Lymphoma Network" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
  <rdf:RDF>
    <rdf:Description rdf:about="#Follicular_Lymphoma Network">
      <dc:Title><![CDATA[Follicular Lymphoma Network]]></dc:Title>
      <dc:Subject><![CDATA[]]></dc:Subject>
      <dc:Contributor><![CDATA[Ed Chen, Harendra Guturu, Jonathan Karr]]></dc:Contributor>
      <dc:Creator><![CDATA[NetworkAnalyzer]]></dc:Creator>
      <dc:Date><![CDATA[Tue Mar 31 2009 02:25:59 PM]]></dc:Date>
    </rdf:Description>
  </rdf:RDF>
  <units name="binary">
    <unit multiplier="1" units="dimensionless"/>
  </units>
  <component name="Media"/>
  <component name="Cytosol"/>
  <component name="Nucleus"/>
  <component name="Media_Cytosol_Membrane"/>
  <component name="Cytosol_Nucleus_Membrane"/>
  <component name="CXCR4">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="CXCR4" initial_value="0"/>
    <variable units="binary" public_interface="in" name="SDF1"/>
    <math cmeta:id="CXCR4_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>CXCR4</ci>
        <ci>SDF1</ci>
      </apply>
    </math>
  </component>
  <component name="IL2Rb">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IL2Rb" initial_value="0"/>
    <variable units="binary" public_interface="in" name="IL2"/>
    <variable units="binary" public_interface="in" name="gC"/>
    <math cmeta:id="IL2Rb_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>IL2Rb</ci>
        <apply>
          <or/>
          <ci>IL2</ci>
          <ci>gC</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="gC">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="gC" initial_value="0"/>
    <variable units="binary" public_interface="in" name="IL2"/>
    <variable units="binary" public_interface="in" name="IL7"/>
    <variable units="binary" public_interface="in" name="IL15"/>
    <variable units="binary" public_interface="in" name="IL4"/>
    <variable units="binary" public_interface="in" name="IL13"/>
    <math cmeta:id="gC_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>gC</ci>
        <apply>
          <or/>
          <ci>IL2</ci>
          <ci>IL7</ci>
          <ci>IL15</ci>
          <ci>IL4</ci>
          <ci>IL13</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="gp130">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="gp130" initial_value="0"/>
    <variable units="binary" public_interface="in" name="IL6"/>
    <math cmeta:id="gp130_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>gp130</ci>
        <ci>IL6</ci>
      </apply>
    </math>
  </component>
  <component name="Iga_b">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Iga_b" initial_value="0"/>
    <variable units="binary" public_interface="in" name="aBCR"/>
    <variable units="binary" public_interface="in" name="H2O2"/>
    <math cmeta:id="Iga_b_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Iga_b</ci>
        <apply>
          <or/>
          <ci>aBCR</ci>
          <ci>H2O2</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="SHP1">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="SHP1" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Iga_b"/>
    <variable units="binary" public_interface="in" name="aBCR"/>
    <variable units="binary" public_interface="in" name="H2O2"/>
    <math cmeta:id="SHP1_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>SHP1</ci>
        <apply>
          <or/>
          <ci>Iga_b</ci>
          <ci>aBCR</ci>
          <ci>H2O2</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="CD19">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="CD19" initial_value="0"/>
  </component>
  <component name="TRAF6">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="TRAF6" initial_value="0"/>
    <variable units="binary" public_interface="in" name="CpG"/>
    <variable units="binary" public_interface="in" name="CD40L"/>
    <math cmeta:id="TRAF6_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>TRAF6</ci>
        <apply>
          <or/>
          <ci>CpG</ci>
          <ci>CD40L</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="TLR9">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="TLR9" initial_value="0"/>
    <variable units="binary" public_interface="in" name="CD40L"/>
    <variable units="binary" public_interface="in" name="CpG"/>
    <math cmeta:id="TLR9_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>TLR9</ci>
        <apply>
          <or/>
          <ci>CD40L</ci>
          <ci>CpG</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="IRAK1_4">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IRAK1_4" initial_value="0"/>
    <variable units="binary" public_interface="in" name="TRAF6"/>
    <variable units="binary" public_interface="in" name="TLR9"/>
    <math cmeta:id="IRAK1_4_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>IRAK1_4</ci>
        <apply>
          <or/>
          <ci>TRAF6</ci>
          <ci>TLR9</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="LynLck">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="LynLck" initial_value="0"/>
    <variable units="binary" public_interface="in" name="IL2Rb"/>
    <variable units="binary" public_interface="in" name="Iga_b"/>
    <variable units="binary" public_interface="in" name="SHP1"/>
    <variable units="binary" public_interface="in" name="CD19"/>
    <math cmeta:id="LynLck_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>LynLck</ci>
        <apply>
          <or/>
          <ci>IL2Rb</ci>
          <ci>Iga_b</ci>
          <ci>SHP1</ci>
          <ci>CD19</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="SDF1">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="SDF1" initial_value="0"/>
  </component>
  <component name="IL2">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IL2" initial_value="0"/>
  </component>
  <component name="IL7">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IL7" initial_value="0"/>
  </component>
  <component name="IL15">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IL15" initial_value="0"/>
  </component>
  <component name="IL4">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IL4" initial_value="0"/>
  </component>
  <component name="IL13">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IL13" initial_value="0"/>
  </component>
  <component name="IL6">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IL6" initial_value="0"/>
  </component>
  <component name="IL10">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IL10" initial_value="0"/>
  </component>
  <component name="IFNg">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IFNg" initial_value="0"/>
  </component>
  <component name="IFNabd">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IFNabd" initial_value="0"/>
  </component>
  <component name="Jak2">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Jak2" initial_value="0"/>
    <variable units="binary" public_interface="in" name="CXCR4"/>
    <variable units="binary" public_interface="in" name="gp130"/>
    <variable units="binary" public_interface="in" name="IFNg"/>
    <variable units="binary" public_interface="in" name="LynLck"/>
    <math cmeta:id="Jak2_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Jak2</ci>
        <apply>
          <or/>
          <ci>CXCR4</ci>
          <ci>gp130</ci>
          <ci>IFNg</ci>
          <ci>LynLck</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Jak3">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Jak3" initial_value="0"/>
    <variable units="binary" public_interface="in" name="gC"/>
    <math cmeta:id="Jak3_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Jak3</ci>
        <ci>gC</ci>
      </apply>
    </math>
  </component>
  <component name="Jak1">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Jak1" initial_value="0"/>
    <variable units="binary" public_interface="in" name="gC"/>
    <variable units="binary" public_interface="in" name="gp130"/>
    <variable units="binary" public_interface="in" name="IL10"/>
    <variable units="binary" public_interface="in" name="IFNg"/>
    <variable units="binary" public_interface="in" name="IFNabd"/>
    <variable units="binary" public_interface="in" name="LynLck"/>
    <math cmeta:id="Jak1_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Jak1</ci>
        <apply>
          <or/>
          <ci>gC</ci>
          <ci>gp130</ci>
          <ci>IL10</ci>
          <ci>IFNg</ci>
          <ci>IFNabd</ci>
          <ci>LynLck</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Tyk2">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Tyk2" initial_value="0"/>
    <variable units="binary" public_interface="in" name="gp130"/>
    <variable units="binary" public_interface="in" name="IL10"/>
    <variable units="binary" public_interface="in" name="IFNabd"/>
    <math cmeta:id="Tyk2_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Tyk2</ci>
        <apply>
          <or/>
          <ci>gp130</ci>
          <ci>IL10</ci>
          <ci>IFNabd</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Shc">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Shc" initial_value="0"/>
    <variable units="binary" public_interface="in" name="IL2Rb"/>
    <variable units="binary" public_interface="in" name="gp130"/>
    <math cmeta:id="Shc_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Shc</ci>
        <apply>
          <or/>
          <ci>IL2Rb</ci>
          <ci>gp130</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="aBCR">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="aBCR" initial_value="0"/>
  </component>
  <component name="H2O2">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="H2O2" initial_value="0"/>
  </component>
  <component name="PMAi">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="PMAi" initial_value="0"/>
  </component>
  <component name="CD40L">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="CD40L" initial_value="0"/>
  </component>
  <component name="CpG">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="CpG" initial_value="0"/>
  </component>
  <component name="BtkItk">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="BtkItk" initial_value="0"/>
    <variable units="binary" public_interface="in" name="LynLck"/>
    <math cmeta:id="BtkItk_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>BtkItk</ci>
        <ci>LynLck</ci>
      </apply>
    </math>
  </component>
  <component name="SykZap">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="SykZap" initial_value="0"/>
    <variable units="binary" public_interface="in" name="IL2Rb"/>
    <variable units="binary" public_interface="in" name="LynLck"/>
    <variable units="binary" public_interface="in" name="BtkItk"/>
    <math cmeta:id="SykZap_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>SykZap</ci>
        <apply>
          <or/>
          <ci>IL2Rb</ci>
          <ci>LynLck</ci>
          <ci>BtkItk</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="PIP3">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="PIP3" initial_value="0"/>
    <variable units="binary" public_interface="in" name="BtkItk"/>
    <variable units="binary" public_interface="in" name="CD19"/>
    <math cmeta:id="PIP3_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>PIP3</ci>
        <apply>
          <or/>
          <ci>BtkItk</ci>
          <ci>CD19</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="PLCg2">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="PLCg2" initial_value="0"/>
    <variable units="binary" public_interface="in" name="LynLck"/>
    <variable units="binary" public_interface="in" name="SykZap"/>
    <variable units="binary" public_interface="in" name="BtkItk"/>
    <variable units="binary" public_interface="in" name="PIP3"/>
    <variable units="binary" public_interface="in" name="Ca2plus"/>
    <math cmeta:id="PLCg2_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>PLCg2</ci>
        <apply>
          <or/>
          <ci>LynLck</ci>
          <ci>SykZap</ci>
          <ci>BtkItk</ci>
          <ci>PIP3</ci>
          <ci>Ca2plus</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Ca2plus">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Ca2plus" initial_value="0"/>
    <variable units="binary" public_interface="in" name="PMAi"/>
    <variable units="binary" public_interface="in" name="PIP3"/>
    <math cmeta:id="Ca2plus_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Ca2plus</ci>
        <apply>
          <or/>
          <ci>PMAi</ci>
          <ci>PIP3</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="DAG">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="DAG" initial_value="0"/>
    <variable units="binary" public_interface="in" name="PLCg2"/>
    <math cmeta:id="DAG_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>DAG</ci>
        <ci>PLCg2</ci>
      </apply>
    </math>
  </component>
  <component name="cCbl">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="cCbl" initial_value="0"/>
  </component>
  <component name="Vav">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Vav" initial_value="0"/>
    <variable units="binary" public_interface="in" name="CD19"/>
    <variable units="binary" public_interface="in" name="cCbl"/>
    <math cmeta:id="Vav_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Vav</ci>
        <apply>
          <or/>
          <ci>CD19</ci>
          <ci>cCbl</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="BLNK">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="BLNK" initial_value="0"/>
    <variable units="binary" public_interface="in" name="PLCg2"/>
    <variable units="binary" public_interface="in" name="SykZap"/>
    <math cmeta:id="BLNK_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>BLNK</ci>
        <apply>
          <or/>
          <ci>PLCg2</ci>
          <ci>SykZap</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Grb2">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Grb2" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Shc"/>
    <variable units="binary" public_interface="in" name="BLNK"/>
    <math cmeta:id="Grb2_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Grb2</ci>
        <apply>
          <or/>
          <ci>Shc</ci>
          <ci>BLNK</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="SHIP">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="SHIP" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Grb2"/>
    <variable units="binary" public_interface="in" name="BLNK"/>
    <variable units="binary" public_interface="in" name="PIP3"/>
    <math cmeta:id="SHIP_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>SHIP</ci>
        <apply>
          <or/>
          <ci>Grb2</ci>
          <ci>BLNK</ci>
          <ci>PIP3</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="SOS">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="SOS" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Grb2"/>
    <math cmeta:id="SOS_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>SOS</ci>
        <ci>Grb2</ci>
      </apply>
    </math>
  </component>
  <component name="PKC">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="PKC" initial_value="0"/>
    <variable units="binary" public_interface="in" name="DAG"/>
    <variable units="binary" public_interface="in" name="PMAi"/>
    <variable units="binary" public_interface="in" name="Ca2plus"/>
    <math cmeta:id="PKC_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>PKC</ci>
        <apply>
          <or/>
          <ci>DAG</ci>
          <ci>PMAi</ci>
          <ci>Ca2plus</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Ras">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Ras" initial_value="0"/>
    <variable units="binary" public_interface="in" name="SOS"/>
    <variable units="binary" public_interface="in" name="DAG"/>
    <variable units="binary" public_interface="in" name="PKC"/>
    <math cmeta:id="Ras_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Ras</ci>
        <apply>
          <or/>
          <ci>SOS</ci>
          <ci>DAG</ci>
          <ci>PKC</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="NIK">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="NIK" initial_value="0"/>
    <variable units="binary" public_interface="in" name="TRAF6"/>
    <math cmeta:id="NIK_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>NIK</ci>
        <ci>TRAF6</ci>
      </apply>
    </math>
  </component>
  <component name="Rac">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Rac" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Vav"/>
    <math cmeta:id="Rac_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Rac</ci>
        <ci>Vav</ci>
      </apply>
    </math>
  </component>
  <component name="MEKK">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="MEKK" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Rac"/>
    <math cmeta:id="MEKK_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>MEKK</ci>
        <ci>Rac</ci>
      </apply>
    </math>
  </component>
  <component name="MKK3_5_6">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="MKK3_5_6" initial_value="0"/>
    <variable units="binary" public_interface="in" name="MEKK"/>
    <variable units="binary" public_interface="in" name="IRAK1_4"/>
    <math cmeta:id="MKK3_5_6_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>MKK3_5_6</ci>
        <apply>
          <or/>
          <ci>MEKK</ci>
          <ci>IRAK1_4</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="MKK4_7">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="MKK4_7" initial_value="0"/>
    <variable units="binary" public_interface="in" name="MEKK"/>
    <math cmeta:id="MKK4_7_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>MKK4_7</ci>
        <ci>MEKK</ci>
      </apply>
    </math>
  </component>
  <component name="Raf1">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Raf1" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Ras"/>
    <math cmeta:id="Raf1_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Raf1</ci>
        <ci>Ras</ci>
      </apply>
    </math>
  </component>
  <component name="MEK1_2">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="MEK1_2" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Raf1"/>
    <math cmeta:id="MEK1_2_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>MEK1_2</ci>
        <ci>Raf1</ci>
      </apply>
    </math>
  </component>
  <component name="IKK">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IKK" initial_value="0"/>
    <variable units="binary" public_interface="in" name="PKC"/>
    <variable units="binary" public_interface="in" name="NIK"/>
    <math cmeta:id="IKK_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>IKK</ci>
        <apply>
          <or/>
          <ci>PKC</ci>
          <ci>NIK</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="CaM">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="CaM" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Ca2plus"/>
    <math cmeta:id="CaM_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>CaM</ci>
        <ci>Ca2plus</ci>
      </apply>
    </math>
  </component>
  <component name="Akt">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Akt" initial_value="0"/>
    <variable units="binary" public_interface="in" name="PIP3"/>
    <math cmeta:id="Akt_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Akt</ci>
        <ci>PIP3</ci>
      </apply>
    </math>
  </component>
  <component name="GSK3b">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="GSK3b" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Akt"/>
    <math cmeta:id="GSK3b_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>GSK3b</ci>
        <ci>Akt</ci>
      </apply>
    </math>
  </component>
  <component name="mTOR">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="mTOR" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Akt"/>
    <math cmeta:id="mTOR_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>mTOR</ci>
        <ci>Akt</ci>
      </apply>
    </math>
  </component>
  <component name="Stat1">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Stat1" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Jak2"/>
    <variable units="binary" public_interface="in" name="Jak1"/>
    <variable units="binary" public_interface="in" name="LynLck"/>
    <math cmeta:id="Stat1_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Stat1</ci>
        <apply>
          <or/>
          <ci>Jak2</ci>
          <ci>Jak1</ci>
          <ci>LynLck</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Stat5">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Stat5" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Jak2"/>
    <variable units="binary" public_interface="in" name="Jak1"/>
    <variable units="binary" public_interface="in" name="LynLck"/>
    <math cmeta:id="Stat5_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Stat5</ci>
        <apply>
          <or/>
          <ci>Jak2</ci>
          <ci>Jak1</ci>
          <ci>LynLck</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Stat6">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Stat6" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Jak3"/>
    <variable units="binary" public_interface="in" name="Jak1"/>
    <math cmeta:id="Stat6_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Stat6</ci>
        <apply>
          <or/>
          <ci>Jak3</ci>
          <ci>Jak1</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Stat3">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Stat3" initial_value="0"/>
    <variable units="binary" public_interface="in" name="Jak1"/>
    <variable units="binary" public_interface="in" name="Tyk2"/>
    <variable units="binary" public_interface="in" name="LynLck"/>
    <math cmeta:id="Stat3_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Stat3</ci>
        <apply>
          <or/>
          <ci>Jak1</ci>
          <ci>Tyk2</ci>
          <ci>LynLck</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Erk1_2">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="Erk1_2" initial_value="0"/>
    <variable units="binary" public_interface="in" name="MEK1_2"/>
    <math cmeta:id="Erk1_2_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Erk1_2</ci>
        <ci>MEK1_2</ci>
      </apply>
    </math>
  </component>
  <component name="IkB">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="IkB" initial_value="0"/>
    <variable units="binary" public_interface="in" name="IKK"/>
    <math cmeta:id="IkB_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>IkB</ci>
        <ci>IKK</ci>
      </apply>
    </math>
  </component>
  <component name="MFkB">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="MFkB" initial_value="0"/>
    <variable units="binary" public_interface="in" name="IkB"/>
    <math cmeta:id="MFkB_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>MFkB</ci>
        <ci>IkB</ci>
      </apply>
    </math>
  </component>
  <component name="NFAT">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="NFAT" initial_value="0"/>
    <variable units="binary" public_interface="in" name="CaM"/>
    <variable units="binary" public_interface="in" name="GSK3b"/>
    <math cmeta:id="NFAT_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>NFAT</ci>
        <apply>
          <or/>
          <ci>CaM</ci>
          <ci>GSK3b</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="S6">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="S6" initial_value="0"/>
    <variable units="binary" public_interface="in" name="mTOR"/>
    <math cmeta:id="S6_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>S6</ci>
        <ci>mTOR</ci>
      </apply>
    </math>
  </component>
  <component name="JNK1_2">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="JNK1_2" initial_value="0"/>
    <variable units="binary" public_interface="in" name="MKK4_7"/>
    <math cmeta:id="JNK1_2_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>JNK1_2</ci>
        <ci>MKK4_7</ci>
      </apply>
    </math>
  </component>
  <component name="p38">
    <rdf:RDF>
      <rdf:Description>
        <dc:Subject><![CDATA[]]></dc:Subject>
      </rdf:Description>
    </rdf:RDF>
    <variable units="binary" public_interface="out" name="p38" initial_value="0"/>
    <variable units="binary" public_interface="in" name="MKK3_5_6"/>
    <math cmeta:id="p38_regulation" xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>p38</ci>
        <ci>MKK3_5_6</ci>
      </apply>
    </math>
  </component>
  <group>
    <relationship_ref name="Cytosol" relationship="containment"/>
    <component_ref component="Cytosol">
      <component_ref component="CXCR4"/>
      <component_ref component="IL2Rb"/>
      <component_ref component="gC"/>
      <component_ref component="gp130"/>
      <component_ref component="Iga_b"/>
      <component_ref component="SHP1"/>
      <component_ref component="CD19"/>
      <component_ref component="TRAF6"/>
      <component_ref component="TLR9"/>
      <component_ref component="IRAK1_4"/>
      <component_ref component="LynLck"/>
      <component_ref component="Jak2"/>
      <component_ref component="Jak3"/>
      <component_ref component="Jak1"/>
      <component_ref component="Tyk2"/>
      <component_ref component="Shc"/>
      <component_ref component="BtkItk"/>
      <component_ref component="SykZap"/>
      <component_ref component="PIP3"/>
      <component_ref component="PLCg2"/>
      <component_ref component="Ca2plus"/>
      <component_ref component="DAG"/>
      <component_ref component="cCbl"/>
      <component_ref component="Vav"/>
      <component_ref component="BLNK"/>
      <component_ref component="Grb2"/>
      <component_ref component="SHIP"/>
      <component_ref component="SOS"/>
      <component_ref component="PKC"/>
      <component_ref component="Ras"/>
      <component_ref component="NIK"/>
      <component_ref component="Rac"/>
      <component_ref component="MEKK"/>
      <component_ref component="MKK3_5_6"/>
      <component_ref component="MKK4_7"/>
      <component_ref component="Raf1"/>
      <component_ref component="MEK1_2"/>
      <component_ref component="IKK"/>
      <component_ref component="CaM"/>
      <component_ref component="Akt"/>
      <component_ref component="GSK3b"/>
      <component_ref component="mTOR"/>
      <component_ref component="IkB"/>
    </component_ref>
  </group>
  <group>
    <relationship_ref name="Nucleus" relationship="containment"/>
    <component_ref component="Nucleus">
      <component_ref component="Stat1"/>
      <component_ref component="Stat5"/>
      <component_ref component="Stat6"/>
      <component_ref component="Stat3"/>
      <component_ref component="Erk1_2"/>
      <component_ref component="MFkB"/>
      <component_ref component="NFAT"/>
      <component_ref component="S6"/>
      <component_ref component="JNK1_2"/>
      <component_ref component="p38"/>
    </component_ref>
  </group>
  <group>
    <relationship_ref name="Media_Cytosol_Membrane" relationship="containment"/>
    <component_ref component="Media_Cytosol_Membrane">
      <component_ref component="SDF1"/>
      <component_ref component="IL2"/>
      <component_ref component="IL7"/>
      <component_ref component="IL15"/>
      <component_ref component="IL4"/>
      <component_ref component="IL13"/>
      <component_ref component="IL6"/>
      <component_ref component="IL10"/>
      <component_ref component="IFNg"/>
      <component_ref component="IFNabd"/>
      <component_ref component="aBCR"/>
      <component_ref component="H2O2"/>
      <component_ref component="PMAi"/>
      <component_ref component="CD40L"/>
      <component_ref component="CpG"/>
    </component_ref>
  </group>
  <connection>
    <map_components component_1="SDF1" component_2="CXCR4"/>
    <map_variables variable_1="SDF1" variable_2="SDF1"/>
  </connection>
  <connection>
    <map_components component_1="IL2" component_2="IL2Rb"/>
    <map_variables variable_1="IL2" variable_2="IL2"/>
  </connection>
  <connection>
    <map_components component_1="gC" component_2="IL2Rb"/>
    <map_variables variable_1="gC" variable_2="gC"/>
  </connection>
  <connection>
    <map_components component_1="IL2" component_2="gC"/>
    <map_variables variable_1="IL2" variable_2="IL2"/>
  </connection>
  <connection>
    <map_components component_1="IL7" component_2="gC"/>
    <map_variables variable_1="IL7" variable_2="IL7"/>
  </connection>
  <connection>
    <map_components component_1="IL15" component_2="gC"/>
    <map_variables variable_1="IL15" variable_2="IL15"/>
  </connection>
  <connection>
    <map_components component_1="IL4" component_2="gC"/>
    <map_variables variable_1="IL4" variable_2="IL4"/>
  </connection>
  <connection>
    <map_components component_1="IL13" component_2="gC"/>
    <map_variables variable_1="IL13" variable_2="IL13"/>
  </connection>
  <connection>
    <map_components component_1="IL6" component_2="gp130"/>
    <map_variables variable_1="IL6" variable_2="IL6"/>
  </connection>
  <connection>
    <map_components component_1="aBCR" component_2="Iga_b"/>
    <map_variables variable_1="aBCR" variable_2="aBCR"/>
  </connection>
  <connection>
    <map_components component_1="H2O2" component_2="Iga_b"/>
    <map_variables variable_1="H2O2" variable_2="H2O2"/>
  </connection>
  <connection>
    <map_components component_1="Iga_b" component_2="SHP1"/>
    <map_variables variable_1="Iga_b" variable_2="Iga_b"/>
  </connection>
  <connection>
    <map_components component_1="aBCR" component_2="SHP1"/>
    <map_variables variable_1="aBCR" variable_2="aBCR"/>
  </connection>
  <connection>
    <map_components component_1="H2O2" component_2="SHP1"/>
    <map_variables variable_1="H2O2" variable_2="H2O2"/>
  </connection>
  <connection>
    <map_components component_1="CpG" component_2="TRAF6"/>
    <map_variables variable_1="CpG" variable_2="CpG"/>
  </connection>
  <connection>
    <map_components component_1="CD40L" component_2="TRAF6"/>
    <map_variables variable_1="CD40L" variable_2="CD40L"/>
  </connection>
  <connection>
    <map_components component_1="CD40L" component_2="TLR9"/>
    <map_variables variable_1="CD40L" variable_2="CD40L"/>
  </connection>
  <connection>
    <map_components component_1="CpG" component_2="TLR9"/>
    <map_variables variable_1="CpG" variable_2="CpG"/>
  </connection>
  <connection>
    <map_components component_1="TRAF6" component_2="IRAK1_4"/>
    <map_variables variable_1="TRAF6" variable_2="TRAF6"/>
  </connection>
  <connection>
    <map_components component_1="TLR9" component_2="IRAK1_4"/>
    <map_variables variable_1="TLR9" variable_2="TLR9"/>
  </connection>
  <connection>
    <map_components component_1="IL2Rb" component_2="LynLck"/>
    <map_variables variable_1="IL2Rb" variable_2="IL2Rb"/>
  </connection>
  <connection>
    <map_components component_1="Iga_b" component_2="LynLck"/>
    <map_variables variable_1="Iga_b" variable_2="Iga_b"/>
  </connection>
  <connection>
    <map_components component_1="SHP1" component_2="LynLck"/>
    <map_variables variable_1="SHP1" variable_2="SHP1"/>
  </connection>
  <connection>
    <map_components component_1="CD19" component_2="LynLck"/>
    <map_variables variable_1="CD19" variable_2="CD19"/>
  </connection>
  <connection>
    <map_components component_1="CXCR4" component_2="Jak2"/>
    <map_variables variable_1="CXCR4" variable_2="CXCR4"/>
  </connection>
  <connection>
    <map_components component_1="gp130" component_2="Jak2"/>
    <map_variables variable_1="gp130" variable_2="gp130"/>
  </connection>
  <connection>
    <map_components component_1="IFNg" component_2="Jak2"/>
    <map_variables variable_1="IFNg" variable_2="IFNg"/>
  </connection>
  <connection>
    <map_components component_1="LynLck" component_2="Jak2"/>
    <map_variables variable_1="LynLck" variable_2="LynLck"/>
  </connection>
  <connection>
    <map_components component_1="gC" component_2="Jak3"/>
    <map_variables variable_1="gC" variable_2="gC"/>
  </connection>
  <connection>
    <map_components component_1="gC" component_2="Jak1"/>
    <map_variables variable_1="gC" variable_2="gC"/>
  </connection>
  <connection>
    <map_components component_1="gp130" component_2="Jak1"/>
    <map_variables variable_1="gp130" variable_2="gp130"/>
  </connection>
  <connection>
    <map_components component_1="IL10" component_2="Jak1"/>
    <map_variables variable_1="IL10" variable_2="IL10"/>
  </connection>
  <connection>
    <map_components component_1="IFNg" component_2="Jak1"/>
    <map_variables variable_1="IFNg" variable_2="IFNg"/>
  </connection>
  <connection>
    <map_components component_1="IFNabd" component_2="Jak1"/>
    <map_variables variable_1="IFNabd" variable_2="IFNabd"/>
  </connection>
  <connection>
    <map_components component_1="LynLck" component_2="Jak1"/>
    <map_variables variable_1="LynLck" variable_2="LynLck"/>
  </connection>
  <connection>
    <map_components component_1="gp130" component_2="Tyk2"/>
    <map_variables variable_1="gp130" variable_2="gp130"/>
  </connection>
  <connection>
    <map_components component_1="IL10" component_2="Tyk2"/>
    <map_variables variable_1="IL10" variable_2="IL10"/>
  </connection>
  <connection>
    <map_components component_1="IFNabd" component_2="Tyk2"/>
    <map_variables variable_1="IFNabd" variable_2="IFNabd"/>
  </connection>
  <connection>
    <map_components component_1="IL2Rb" component_2="Shc"/>
    <map_variables variable_1="IL2Rb" variable_2="IL2Rb"/>
  </connection>
  <connection>
    <map_components component_1="gp130" component_2="Shc"/>
    <map_variables variable_1="gp130" variable_2="gp130"/>
  </connection>
  <connection>
    <map_components component_1="LynLck" component_2="BtkItk"/>
    <map_variables variable_1="LynLck" variable_2="LynLck"/>
  </connection>
  <connection>
    <map_components component_1="IL2Rb" component_2="SykZap"/>
    <map_variables variable_1="IL2Rb" variable_2="IL2Rb"/>
  </connection>
  <connection>
    <map_components component_1="LynLck" component_2="SykZap"/>
    <map_variables variable_1="LynLck" variable_2="LynLck"/>
  </connection>
  <connection>
    <map_components component_1="BtkItk" component_2="SykZap"/>
    <map_variables variable_1="BtkItk" variable_2="BtkItk"/>
  </connection>
  <connection>
    <map_components component_1="BtkItk" component_2="PIP3"/>
    <map_variables variable_1="BtkItk" variable_2="BtkItk"/>
  </connection>
  <connection>
    <map_components component_1="CD19" component_2="PIP3"/>
    <map_variables variable_1="CD19" variable_2="CD19"/>
  </connection>
  <connection>
    <map_components component_1="LynLck" component_2="PLCg2"/>
    <map_variables variable_1="LynLck" variable_2="LynLck"/>
  </connection>
  <connection>
    <map_components component_1="SykZap" component_2="PLCg2"/>
    <map_variables variable_1="SykZap" variable_2="SykZap"/>
  </connection>
  <connection>
    <map_components component_1="BtkItk" component_2="PLCg2"/>
    <map_variables variable_1="BtkItk" variable_2="BtkItk"/>
  </connection>
  <connection>
    <map_components component_1="PIP3" component_2="PLCg2"/>
    <map_variables variable_1="PIP3" variable_2="PIP3"/>
  </connection>
  <connection>
    <map_components component_1="Ca2plus" component_2="PLCg2"/>
    <map_variables variable_1="Ca2plus" variable_2="Ca2plus"/>
  </connection>
  <connection>
    <map_components component_1="PMAi" component_2="Ca2plus"/>
    <map_variables variable_1="PMAi" variable_2="PMAi"/>
  </connection>
  <connection>
    <map_components component_1="PIP3" component_2="Ca2plus"/>
    <map_variables variable_1="PIP3" variable_2="PIP3"/>
  </connection>
  <connection>
    <map_components component_1="PLCg2" component_2="DAG"/>
    <map_variables variable_1="PLCg2" variable_2="PLCg2"/>
  </connection>
  <connection>
    <map_components component_1="CD19" component_2="Vav"/>
    <map_variables variable_1="CD19" variable_2="CD19"/>
  </connection>
  <connection>
    <map_components component_1="cCbl" component_2="Vav"/>
    <map_variables variable_1="cCbl" variable_2="cCbl"/>
  </connection>
  <connection>
    <map_components component_1="PLCg2" component_2="BLNK"/>
    <map_variables variable_1="PLCg2" variable_2="PLCg2"/>
  </connection>
  <connection>
    <map_components component_1="SykZap" component_2="BLNK"/>
    <map_variables variable_1="SykZap" variable_2="SykZap"/>
  </connection>
  <connection>
    <map_components component_1="Shc" component_2="Grb2"/>
    <map_variables variable_1="Shc" variable_2="Shc"/>
  </connection>
  <connection>
    <map_components component_1="BLNK" component_2="Grb2"/>
    <map_variables variable_1="BLNK" variable_2="BLNK"/>
  </connection>
  <connection>
    <map_components component_1="Grb2" component_2="SHIP"/>
    <map_variables variable_1="Grb2" variable_2="Grb2"/>
  </connection>
  <connection>
    <map_components component_1="BLNK" component_2="SHIP"/>
    <map_variables variable_1="BLNK" variable_2="BLNK"/>
  </connection>
  <connection>
    <map_components component_1="PIP3" component_2="SHIP"/>
    <map_variables variable_1="PIP3" variable_2="PIP3"/>
  </connection>
  <connection>
    <map_components component_1="Grb2" component_2="SOS"/>
    <map_variables variable_1="Grb2" variable_2="Grb2"/>
  </connection>
  <connection>
    <map_components component_1="DAG" component_2="PKC"/>
    <map_variables variable_1="DAG" variable_2="DAG"/>
  </connection>
  <connection>
    <map_components component_1="PMAi" component_2="PKC"/>
    <map_variables variable_1="PMAi" variable_2="PMAi"/>
  </connection>
  <connection>
    <map_components component_1="Ca2plus" component_2="PKC"/>
    <map_variables variable_1="Ca2plus" variable_2="Ca2plus"/>
  </connection>
  <connection>
    <map_components component_1="SOS" component_2="Ras"/>
    <map_variables variable_1="SOS" variable_2="SOS"/>
  </connection>
  <connection>
    <map_components component_1="DAG" component_2="Ras"/>
    <map_variables variable_1="DAG" variable_2="DAG"/>
  </connection>
  <connection>
    <map_components component_1="PKC" component_2="Ras"/>
    <map_variables variable_1="PKC" variable_2="PKC"/>
  </connection>
  <connection>
    <map_components component_1="TRAF6" component_2="NIK"/>
    <map_variables variable_1="TRAF6" variable_2="TRAF6"/>
  </connection>
  <connection>
    <map_components component_1="Vav" component_2="Rac"/>
    <map_variables variable_1="Vav" variable_2="Vav"/>
  </connection>
  <connection>
    <map_components component_1="Rac" component_2="MEKK"/>
    <map_variables variable_1="Rac" variable_2="Rac"/>
  </connection>
  <connection>
    <map_components component_1="MEKK" component_2="MKK3_5_6"/>
    <map_variables variable_1="MEKK" variable_2="MEKK"/>
  </connection>
  <connection>
    <map_components component_1="IRAK1_4" component_2="MKK3_5_6"/>
    <map_variables variable_1="IRAK1_4" variable_2="IRAK1_4"/>
  </connection>
  <connection>
    <map_components component_1="MEKK" component_2="MKK4_7"/>
    <map_variables variable_1="MEKK" variable_2="MEKK"/>
  </connection>
  <connection>
    <map_components component_1="Ras" component_2="Raf1"/>
    <map_variables variable_1="Ras" variable_2="Ras"/>
  </connection>
  <connection>
    <map_components component_1="Raf1" component_2="MEK1_2"/>
    <map_variables variable_1="Raf1" variable_2="Raf1"/>
  </connection>
  <connection>
    <map_components component_1="PKC" component_2="IKK"/>
    <map_variables variable_1="PKC" variable_2="PKC"/>
  </connection>
  <connection>
    <map_components component_1="NIK" component_2="IKK"/>
    <map_variables variable_1="NIK" variable_2="NIK"/>
  </connection>
  <connection>
    <map_components component_1="Ca2plus" component_2="CaM"/>
    <map_variables variable_1="Ca2plus" variable_2="Ca2plus"/>
  </connection>
  <connection>
    <map_components component_1="PIP3" component_2="Akt"/>
    <map_variables variable_1="PIP3" variable_2="PIP3"/>
  </connection>
  <connection>
    <map_components component_1="Akt" component_2="GSK3b"/>
    <map_variables variable_1="Akt" variable_2="Akt"/>
  </connection>
  <connection>
    <map_components component_1="Akt" component_2="mTOR"/>
    <map_variables variable_1="Akt" variable_2="Akt"/>
  </connection>
  <connection>
    <map_components component_1="Jak2" component_2="Stat1"/>
    <map_variables variable_1="Jak2" variable_2="Jak2"/>
  </connection>
  <connection>
    <map_components component_1="Jak1" component_2="Stat1"/>
    <map_variables variable_1="Jak1" variable_2="Jak1"/>
  </connection>
  <connection>
    <map_components component_1="LynLck" component_2="Stat1"/>
    <map_variables variable_1="LynLck" variable_2="LynLck"/>
  </connection>
  <connection>
    <map_components component_1="Jak2" component_2="Stat5"/>
    <map_variables variable_1="Jak2" variable_2="Jak2"/>
  </connection>
  <connection>
    <map_components component_1="Jak1" component_2="Stat5"/>
    <map_variables variable_1="Jak1" variable_2="Jak1"/>
  </connection>
  <connection>
    <map_components component_1="LynLck" component_2="Stat5"/>
    <map_variables variable_1="LynLck" variable_2="LynLck"/>
  </connection>
  <connection>
    <map_components component_1="Jak3" component_2="Stat6"/>
    <map_variables variable_1="Jak3" variable_2="Jak3"/>
  </connection>
  <connection>
    <map_components component_1="Jak1" component_2="Stat6"/>
    <map_variables variable_1="Jak1" variable_2="Jak1"/>
  </connection>
  <connection>
    <map_components component_1="Jak1" component_2="Stat3"/>
    <map_variables variable_1="Jak1" variable_2="Jak1"/>
  </connection>
  <connection>
    <map_components component_1="Tyk2" component_2="Stat3"/>
    <map_variables variable_1="Tyk2" variable_2="Tyk2"/>
  </connection>
  <connection>
    <map_components component_1="LynLck" component_2="Stat3"/>
    <map_variables variable_1="LynLck" variable_2="LynLck"/>
  </connection>
  <connection>
    <map_components component_1="MEK1_2" component_2="Erk1_2"/>
    <map_variables variable_1="MEK1_2" variable_2="MEK1_2"/>
  </connection>
  <connection>
    <map_components component_1="IKK" component_2="IkB"/>
    <map_variables variable_1="IKK" variable_2="IKK"/>
  </connection>
  <connection>
    <map_components component_1="IkB" component_2="MFkB"/>
    <map_variables variable_1="IkB" variable_2="IkB"/>
  </connection>
  <connection>
    <map_components component_1="CaM" component_2="NFAT"/>
    <map_variables variable_1="CaM" variable_2="CaM"/>
  </connection>
  <connection>
    <map_components component_1="GSK3b" component_2="NFAT"/>
    <map_variables variable_1="GSK3b" variable_2="GSK3b"/>
  </connection>
  <connection>
    <map_components component_1="mTOR" component_2="S6"/>
    <map_variables variable_1="mTOR" variable_2="mTOR"/>
  </connection>
  <connection>
    <map_components component_1="MKK4_7" component_2="JNK1_2"/>
    <map_variables variable_1="MKK4_7" variable_2="MKK4_7"/>
  </connection>
  <connection>
    <map_components component_1="MKK3_5_6" component_2="p38"/>
    <map_variables variable_1="MKK3_5_6" variable_2="MKK3_5_6"/>
  </connection>
</model>